CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:43
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['This pipeline imports the pixel probabilities generated by Ilastik and performs cell segmentation.', 'Please select the ilastik folder and drop it here.', '', 'Default Output Folder: path/to/analysis/cpout']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*[\\/](?P<ROI>[P][0-9]{3}_[s][0]_[a][0-30]{1,2}_[a][c])
    Extract metadata from:All images
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    Metadata extraction method:Extract from image file headers
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain "Probabilities")
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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notes:['We select all files ending with _Probabilities.tiff (these images contain the ilastik pixel probabilites) and read them in as color image']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does endwith "_Probabilities.tiff")
    Name to assign these images:ProbabStack
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "Ir191")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "CD45")
    Name to assign these images:CD45
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "ICSK3")
    Name to assign these images:TumorCyto
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "SOX10")
    Name to assign these images:TumorNuc
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Resize:[module_num:5|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notes:['The pixel probability images are downscaled to match the initial image dimensions.']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
    Select the input image:ProbabStack
    Name the output image:ProbabStackResize
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.5
    Y Resizing factor:0.5
    Z Resizing factor:1.0
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    Interpolation method:Bilinear
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    Additional image count:0

ColorToGray:[module_num:6|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notes:['The images are split into the three individual channels (1: nucleus (red); 2: cytoplasm (green); 3: background (blue)).']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
    Select the input image:ProbabStackResize
    Conversion method:Split
    Image type:Channels
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    Channel count:3
    Channel number:1
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    Image name:Nuc
    Channel number:2
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    Image name:Cyto
    Channel number:3
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    Image name:Bg

ImageMath:[module_num:7|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notes:['The nulcear and cytoplasmic channels are summed up to form a single channel indicating the full cell probability.']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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:NucCyto
    Image or measurement?:Image
    Select the first image:Cyto
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Nuc
    Multiply the second image by:1.0
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
Smooth:[module_num:8|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notes:['The nuclear probabilities are smoothed using a gaussian filter.']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
    Select the input image:Nuc
    Name the output image:NucFil
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
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
IdentifyPrimaryObjects:[module_num:9|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notes:['Based on the smoothed nuclear channel, nuclear objects are detected.']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enabled:False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
    Select the input image:NucFil
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):3,12
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
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    Use advanced settings?:No
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:NucFil
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):3,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.1
    Threshold correction factor:0.1
    Lower and upper bounds on threshold:0.35,1
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
SaveImages:[module_num:11|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:NucCyto
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:nucMask
    Number of digits:4
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    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureObjectSizeShape:[module_num:12|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notes:['The size and shape features of the nuclei are measured.']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
    Select object sets to measure:Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MedianFilter:[module_num:13|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
    Select the input image:DNA
    Name the output image:DNA
    Window:2

FilterObjects:[module_num:14|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notes:['Very small nuclei (< Minimum value) are removed from the set of nuclei. ']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
    Select the objects to filter:Nuclei
    Name the output objects:NucFil
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:4
    Filter using a maximum measurement value?:No
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
IdentifySecondaryObjects:[module_num:15|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notes:['Starting from the filtered nuclei the segmentation mask is expanded along the nuclear+cytoplasm probabilities. This will result in the final cell segmentation masks.']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enabled:False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
    Select the input objects:NucFil
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:NucCyto
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0, 1.0
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:16|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
    Select the input objects:NucFil
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - B
    Select the input image:NucCyto
    Number of pixels by which to expand the primary objects:10
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0, 1.0
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    Log transform before thresholding?:No
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
RescaleIntensity:[module_num:17|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
    Select the input image:DNA
    Name the output image:DNA
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Maximum for each image
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    Intensity range for the output image:0.0,1.0
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
OverlayOutlines:[module_num:18|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:NucOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:red
    Select objects to display:Cells

OverlayOutlines:[module_num:19|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:NucOutline
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:red
    Select objects to display:Nuclei

SaveImages:[module_num:20|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:NucOverlay
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:NucOverlay
    Number of digits:4
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    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:21|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:NucOutline
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:NucOutline
    Number of digits:4
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    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

OverlayOutlines:[module_num:22|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Cyto
    Name the output image:CytoOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:red
    Select objects to display:Cells

SaveImages:[module_num:23|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:CytoOverlay
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:CytoOverlay
    Number of digits:4
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    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:24|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Cyto
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Cyto
    Number of digits:4
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    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

OverlayOutlines:[module_num:25|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Bg
    Name the output image:BgOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:red
    Select objects to display:Cells

SaveImages:[module_num:26|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:BgOverlay
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:BgOverlay
    Number of digits:4
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    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:27|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:NucFil
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Nucleus
    Number of digits:4
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    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MedianFilter:[module_num:28|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
    Select the input image:TumorNuc
    Name the output image:TumorNucFilter
    Window:2

MedianFilter:[module_num:29|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
    Select the input image:TumorCyto
    Name the output image:TumorCytoFilter
    Window:1

RescaleIntensity:[module_num:30|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
    Select the input image:TumorCytoFilter
    Name the output image:TumorCytoRescale
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Maximum for each image
    Lower intensity limit for the input image:1.5
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    Intensity range for the output image:0.0,1.0
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
RescaleIntensity:[module_num:31|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
    Select the input image:TumorNucFilter
    Name the output image:TumorNucRescale
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Maximum for each image
    Lower intensity limit for the input image:1
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    Intensity range for the output image:0.0,1.0
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
ImageMath:[module_num:32|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:TumorAdd
    Image or measurement?:Image
    Select the first image:TumorCytoRescale
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:TumorNucRescale
    Multiply the second image by:1.0
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
IdentifyPrimaryObjects:[module_num:33|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
    Select the input image:TumorAdd
    Name the primary objects to be identified:TumorDomain
    Typical diameter of objects, in pixel units (Min,Max):40,400000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:0.55
    Lower and upper bounds on threshold:0.05,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
FillObjects:[module_num:34|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
    Select the input object:TumorDomain
    Name the output object:TumorFill
    Minimum hole size:64
    Planewise fill:No
    Filling method:Holes

SplitOrMergeObjects:[module_num:35|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
    Select the input objects:TumorFill
    Name the new objects:TumorMerge
    Operation:Merge
    Maximum distance within which to merge objects:5
    Merge using a grayscale image?:No
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    Merging method:Distance
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
ConvertObjectsToImage:[module_num:36|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
    Select the input objects:TumorMerge
    Name the output image:TumorDomain
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:37|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
    Select the type of image to save:Image
    Select the image to save:TumorDomain
    Select method for constructing file names:From image filename
    Select image name for file prefix:ProbabStack
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_TumorDomain
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ConvertObjectsToImage:[module_num:38|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notes:['The segmentation masks are converted into images.']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
    Select the input objects:Cells
    Name the output image:CellImage
    Select the color format:uint16
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
SaveImages:[module_num:39|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notes:['The segmentation masks are saved as single-channel, 16-bit .tiff images.']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
    Select the type of image to save:Image
    Select the image to save:CellImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:ProbabStack
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_mask
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|masks
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:40|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notes:['The downscaled probability images are saved as 16-bit .tiff images.']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
    Select the type of image to save:Image
    Select the image to save:ProbabStackResize
    Select method for constructing file names:From image filename
    Select image name for file prefix:ProbabStack
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_s1
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|probabilities
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

OverlayOutlines:[module_num:41|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notes:['Overlay the tumor domain on the regular image']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:TumorCytoRescale
    Name the output image:TumorOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:red
    Select objects to display:TumorDomain

SaveImages:[module_num:42|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
    Select the type of image to save:Image
    Select the image to save:TumorOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:ProbabStack
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_TumorDomain_Overlay
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

CreateBatchFiles:[module_num:43|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enabled:False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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:/home/vitoz
    Cluster root path:/home/vitoz
